PsychoPy2experiment version="3.0.0b10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1463, 823]
  color = #E8F7F7
  colorSpace = hex
  expName = test_switching_task_v5
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Routines
  Routine End
    TextComponent text_13
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = The test is now finished.
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  Routine instruct_switch2
    TextComponent text_5
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        Remember, if you see a BLUE arrow, answer based on the LOCATION of the arrow on the screen.

        If you see an ORANGE arrow, answer based on the DIRECTION the arrow is pointing.

        Press the space key to continue
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine instruct_switch1
    TextComponent text_3
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        In this test, you will see either a BLUE or an ORANGE arrow.

        If you see a BLUE arrow, press the left or right key
        based on the LOCATION of the arrow.

        Press "N"  if the BLUE arrow is on the left.
        Press "M" if the BLUE arrow is on the right.

        If you see an ORANGE arrow, press the left or right key
        based on the direction it is pointing.

        Press "N" if the ORANGE arrow points left.
        Press "M" if the ORANGE arrow points right.

        Press the space key to continue.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine location_practice_trial
    ImageComponent image_3
      image [set every repeat] = $File
      pos [set every repeat] = $(PositionX, PositionY)
      size = 0.5
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 7.75
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    TextComponent fixation2_2
      color = black
      letterHeight = 0.333
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = +
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    KeyboardComponent response_location3
      allowedKeys = "n","m","None"
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 7.9
      store = first key
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent code_8
      Code Type = Both
      Begin JS Routine:
        if (repeat_location_practice.thisN == 0) {
            number_correct = 0;
        }
      Begin Routine:
        if repeat_location_practice.thisN == 0:
            number_correct = 0
      End JS Routine:
        if (response_location3.corr) {
            number_correct = number_correct + 1;
        }

        if (number_correct/repeat_location_practice.nTotal >= 0.75) {
            endLocationPractice.finished = true;
        }
      End Routine:
        if response_location3.corr:
            number_correct = number_correct + 1

        if (repeat_location_practice.thisN + 1) == repeat_location_practice.nTotal:
            if number_correct/repeat_location_practice.nTotal >= 0.75:
                endLocationPractice.finished = True
  Routine locate2_ready
    TextComponent text_15
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        Now you will see BLUE arrows.

        Answer based on the LOCATION of the arrows on the screen.
        If the BLUE arrow is on the left side, press the "N" key.
        If the arrow is on the right side, press the "M" key.

        Press 'space' to start
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine ready
    TextComponent text_6
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
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      text:
        Ready?

        The test starts in 5 seconds
  Routine switch_trial
    TextComponent fixation3
      color = black
      letterHeight = 0.33
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = +
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    ImageComponent image_2
      image [set every repeat] = $File
      pos [set every repeat] = $(PositionX, PositionY)
      size = 0.5
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 7.75
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    KeyboardComponent response_switch
      allowedKeys = "n","m","None"
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 7.9
      store = first key
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        console.log(PositionX);
        console.log(File);
        console.log(number_correct);
        console.log(repeat_switch_practice);
        console.log(repeat_switch_practice.thisN);
        if (repeat_switch_practice.thisN == 0) {
            number_correct = 0;
        }
      Begin Routine:
        if repeat_switch_practice.thisN == 0:
            number_correct = 0
      End JS Routine:
        if (response_switch.corr) {
            number_correct = number_correct + 1;
        }

        if (number_correct/repeat_switch_practice.nTotal >= 0.75) {
            endSwitchPractice.finished = true;
        }
      End Routine:
        if response_switch.corr:
            number_correct = number_correct + 1

        if (repeat_switch_practice.thisN + 1) == repeat_switch_practice.nTotal:
            if number_correct/repeat_switch_practice.nTotal >= 0.75:
                endSwitchPractice.finished = True
  Routine switch_feedback
    CodeComponent message_switch
      Code Type = Both
      Begin Experiment:
        msg=' '
      Begin JS Experiment:
        msg=' ';
      Begin JS Routine:
        if (response_switch.corr) {   msg="Correct, good job!"; } else {     msg="Wrong, try again"; }
      Begin Routine:
        if response_switch.corr:
            msg="Correct, good job!"
        else:
            msg="Wrong, try again"
    TextComponent text_12
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine do_your_best
    TextComponent text_4
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0
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      text:
        Now you will start the real test.

        Try to answer as fast as you can without making mistakes.

        It is ok if you make some mistakes or lose track, just do your best.

        Press space key to start the test
    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine instruc_location
    TextComponent instruct1
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        In this test, you will see a BLUE arrow on your screen. Please pay attention to the LOCATION of the arrow.
        It will be on the left or right side of the screen.

        Press the "N" key if the BLUE arrow is on the left side

        Press the "M" key if the BLUE arrow is on the right side

        Press the space key to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine b'location_trials_3'
    TextComponent text_9
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        You will do a short practice trial before the real test.

        Remember, press the "N" key if the ORANGE arrow points to the left side.

        Press the "M" key if the ORANGE arrow points to the right side.

        Press the space key to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine ready_practice
    TextComponent text_7
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = The practice test will start in 5 seconds.
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    CodeComponent code_5
      Code Type = Both
      Begin Experiment:
        number_correct = 0
        msg = ' '
      Begin JS Experiment:
        number_correct = 0;
        msg = ' ';
      Begin JS Routine:
        number_correct = 0;
      Begin Routine:
        number_correct = 0
  Routine instructions_dir1
    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        Now, you will do a different task. You will see an ORANGE arrow on the screen. Pay attention to which way the arrow is pointing.
        It will point to the left or the right.

        Press the "N" key if the ORANGE arrow points to the left.

        Press the "M" key if the ORANGE arrow points to the right.

        Press the space key to continue
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine feedback_direction
    CodeComponent message2
      Code Type = Both
      Begin Experiment:
        msg=' '
      Begin JS Experiment:
        msg=' ';
      Begin JS Routine:
        if (response_direction2.corr) {   msg="Correct, good job!"; } else {     msg="Wrong, try again"; }
      Begin Routine:
        if response_direction2.corr:
            msg="Correct, good job!"
        else:
            msg="Wrong, try again"
    TextComponent text_10
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine location_trial
  Routine instruct_switch_practice
    TextComponent text_11
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You will do a short practice trial before the real test.


        Press the space key to continue
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine location_trials
    ImageComponent arrow_3
      image [set every repeat] = $File
      pos [set every repeat] = $(PositionX, PositionY)
      size = 0.5
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 7.75
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    KeyboardComponent response_location_2
      allowedKeys = "n","m","None"
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 7.9
      store = first key
      storeCorrect = True
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    TextComponent fixation_3
      color = black
      letterHeight = 0.33
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = +
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  Routine loc2_ready
  Routine location_practice_2
    TextComponent location_practice_text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        You will do some practice trials before the real test.

        Remember, press the "N" key if the BLUE arrow is on the left side.

        Press the "M" key if the BLUE arrow is on the right side.

        Press the space key to continue
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.2
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  Routine switch_practice_2
  Routine feedback_location
    CodeComponent message
      Code Type = Both
      Begin Experiment:
        msg=' '
      Begin JS Experiment:
        msg=' ';
      Begin JS Routine:
        console.log('\nrepeat_location_practice.thisN+1=' + parseInt(repeat_location_practice.thisN)+1 );
        console.log('endLocationPractice.finished=' + endLocationPractice.finished );
        console.log('number_correct=' + number_correct );
        console.log('repeat_location_practice.nTotal=' + repeat_location_practice.nTotal );
        console.log('number_correct/repeat_location_practice.nTotal=' + number_correct/repeat_location_practice.nTotal);
        console.log('number_correct/repeat_location_practice.nTotal >= 0.75=' + (number_correct/repeat_location_practice.nTotal >= 0.75) );
        if (response_location3.corr) {   msg="Correct, good job!"; } else {     msg="Wrong, try again"; }
      Begin Routine:
        if response_location3.corr:
            msg="Correct, good job!"
        else:
            msg="Wrong, try again"
    TextComponent text_8
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $msg
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  Routine direct2_ready
    TextComponent text_14
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        Now you will see ORANGE arrows.

        Just like before, answer based on what DIRECTION the arrow is pointing.
        If the ORANGE arrow points left, press the "N" key
        If the arrow points right, press the "M" key

        Press 'space' to start the test
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine switch_ready2
    TextComponent switch_block2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.75
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      text:
        Now you will do the same task again.
        If the arrow is BLUE, pay attention to the location of the arrow.
        If the arrow is ORANGE, pay attention to the direction of the arrow.

        Respond as fast as you can.
        Try not to make mistakes.

        Press 'space' to start
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine MorePractice3
    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        if (endSwitchPractice.finished) {   continueRoutine = false; }
      Begin Routine:
        if endSwitchPractice.finished:
            continueRoutine = False
    TextComponent text_16
      color = black
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .11
      wrapWidth = 1.75
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      text:
        Let's do some more practice.
        Remember, pay attention to the COLOUR of the arrows.

        If the arrow is BLUE, press "N" or "M" based on the LOCATION of the arrow

        If the arrow is ORANGE, press "N" or "M" based on the DIRECTION of the arrow
  Routine MorePractice2
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        if (endDirectionPractice.finished) {   continueRoutine = false; }
      Begin Routine:
        if endDirectionPractice.finished:
            continueRoutine = False
    TextComponent more_direction_practice
      color = black
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .11
      wrapWidth = 1.75
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      text:
        Let's do some more practice.
        Remember: when you see the ORANGE arrows,

        press "N" if the ORANGE arrow points to the left,

        press "M" is the ORANGE arrow points to the right.
  Routine direction_trial
    ImageComponent image
      image [set every repeat] = $File
      pos [set every repeat] = $(PositionX, PositionY)
      size = 0.5
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 7.75
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    TextComponent fixation2
      color = black
      letterHeight = 0.33
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = +
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    KeyboardComponent response_direction
      allowedKeys = "n","m","None"
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 7.9
      store = first key
      storeCorrect = True
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  Routine b'location_trials_2'
    ImageComponent arrow_2
      image [set every repeat] = $File
      pos [set every repeat] = $Position
      size = 0.5
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 7.75
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    KeyboardComponent response_location
      allowedKeys = "n","m","None"
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 7.9
      store = first key
      storeCorrect = True
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    TextComponent fixation_2
      color = black
      letterHeight = 0.33
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = +
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    CodeComponent repeatPractice
      Code Type = Py
      Begin Routine:
        if repeat_location_practice.thisN == 0:
            number_correct = 0
        #resets the accuracy counter to 0 after each time the practice block repeats
      End Routine:
        if response_location.corr:
            number_correct = number_correct + 1
        #keeps track of the accuracy

        if (repeat_location_practice.thisN + 1) == repeat_location_practice.nTotal:
            if number_correct/repeat_location_practice.nTotal >= 0.75:
                endLocationPractice.finished = True
        # because psychopy starts counting at 0, you have to add 1 to repeat_location_practice.thisN, otherwise the logical statement will never be reached because .thisN will never equal nTotal!
  Routine locationPracticeCheck
    CodeComponent code
      Code Type = Py
      Begin Routine:
        if location_practice_thisN==12:
            if score/location_practice_nTotal > 0.83:
                repeatLocationPractice_finished = True
        else:
            location_practice_thisN = location_practice_thisN + 1
            score = 0
            repeatLocationPractice_finished = False
  Routine trial
    ImageComponent arrow
      image [set every repeat] = $File
      size = [1,0.75]
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 8.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right'
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 8
      store = all keys
      storeCorrect = True
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    TextComponent fixation
      color = black
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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  Routine direction_practice_trial
    ImageComponent image_4
      image [set every repeat] = $File
      pos [set every repeat] = $(PositionX, PositionY)
      size = 0.5
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 7.75
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    TextComponent fixation2_3
      color = black
      letterHeight = 0.33
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = +
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    KeyboardComponent response_direction2
      allowedKeys = "n","m","None"
      correctAns = $CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 7.9
      store = first key
      storeCorrect = True
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    CodeComponent code_9
      Code Type = Both
      Begin JS Routine:
        if (repeat_direction_practice.thisN === 0) {   number_correct === 0; }
      Begin Routine:
        if repeat_direction_practice.thisN == 0:
            number_correct = 0
      End JS Routine:
        if (response_direction2.corr) {
            number_correct = number_correct + 1;
        }

        if (number_correct/repeat_direction_practice.nTotal >= 0.75) {
            endDirectionPractice.finished = true;
        }
      End Routine:
        if response_direction2.corr:
            number_correct = number_correct + 1

        if (repeat_direction_practice.thisN + 1) == repeat_direction_practice.nTotal:
            if number_correct/repeat_direction_practice.nTotal >= 0.75:
                endDirectionPractice.finished = True
  Routine MorePractice
    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        console.log('endLocationPractice.finished=');
        console.log(endLocationPractice.finished);
        console.log('endLocationPractice.nReps= ' + endLocationPractice);
        if (endLocationPractice.finished == true) {   continueRoutine = false; }
      Begin Routine:
        if endLocationPractice.finished:
            continueRoutine = False
        #don't show this screen if the loop is finishing
    TextComponent repeat_instructions_location
      color = black
      letterHeight = 0.1
      opacity = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .11
      wrapWidth = 1.75
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      text:
        Let's practice some more.

        Remember, when you see a BLUE arrow:

        press "N" if the arrow is on the Left side of the screen

        press "M" if the arrow is on the Right side of the screen
  Routine ISI
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .75
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Flow
  Routine instruct_switch1
  Routine instruct_switch2
  Routine instruct_switch_practice
  LoopInitiator endSwitchPractice loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine ready_practice
    Routine ISI
    LoopInitiator repeat_switch_practice loopType="TrialHandler"
      conditionsFile = switch_practice.xlsx
      loopType = random
      nReps = 1
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      conditions:
        "[{u'Direction': u'Left', u'Location': u'Left', u'File': u'orange_arrow_L.png', u'Position': [-0.33, 0], u'Colour': u'orange', u'SwitchTrial': None, u'Congruent': 1L, u'CorrAns': u'n'},
        {u'Direction': u'Left', u'Location': u'Right', u'File': u'orange_arrow_L.png', u'Position': [0.33, 0], u'Colour': u'orange', u'SwitchTrial': None, u'Congruent': 0L, u'CorrAns': u'n'},
        {u'Direction': u'Right', u'Location': u'Left', u'File': u'orange_arrow_R.png', u'Position': [-0.33, 0], u'Colour': u'orange', u'SwitchTrial': None, u'Congruent': 0L, u'CorrAns': u'm'},
        {u'Direction': u'Right', u'Location': u'Right', u'File': u'orange_arrow_R.png', u'Position': [0.33, 0], u'Colour': u'orange', u'SwitchTrial': None, u'Congruent': 1L, u'CorrAns': u'm'},
        {u'Direction': u'Left', u'Location': u'Left', u'File': u'blue_arrow_L.png', u'Position': [-0.33, 0], u'Colour': u'blue', u'SwitchTrial': None, u'Congruent': 1L, u'CorrAns': u'n'},
        {u'Direction': u'Left', u'Location': u'Right', u'File': u'blue_arrow_L.png', u'Position': [0.33, 0], u'Colour': u'blue', u'SwitchTrial': None, u'Congruent': 0L, u'CorrAns': u'm'},
        {u'Direction': u'Right', u'Location': u'Left', u'File': u'blue_arrow_R.png', u'Position': [-0.33, 0], u'Colour': u'blue', u'SwitchTrial': None, u'Congruent': 0L, u'CorrAns': u'n'},
        {u'Direction': u'Right', u'Location': u'Right', u'File': u'blue_arrow_R.png', u'Position': [0.33, 0], u'Colour': u'blue', u'SwitchTrial': None, u'Congruent': 1L, u'CorrAns': u'm'}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
      Routine switch_trial
      Routine switch_feedback
      Routine ISI
    LoopTerminator repeat_switch_practice
    Routine MorePractice3
  LoopTerminator endSwitchPractice
  Routine do_your_best
  Routine ready
  Routine ISI
  LoopInitiator switch1_trial loopType="TrialHandler"
    conditionsFile = switch_condition1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      "[{u'Colour': u'orange', u'Trial': u'buffer', u'serialPosition': None, u'Location': u'Left', u'Position': [-0.33, 0], u'Block': None, u'Direction': u'Left', u'nthRun': None, u'SwitchTrial': u'buffer', u'Congruent': 1L, u'CorrAns': u'n', u'File': u'orange_arrow_L.png'},
      {u'Colour': u'orange', u'Trial': u'buffer', u'serialPosition': None, u'Location': u'Right', u'Position': [0.33, 0], u'Block': None, u'Direction': u'Left', u'nthRun': None, u'SwitchTrial': u'buffer', u'Congruent': 0L, u'CorrAns': u'n', u'File': u'orange_arrow_L.png'},
      {u'Colour': u'orange', u'Trial': u'buffer', u'serialPosition': None, u'Location': u'Left', u'Position': [-0.33, 0], u'Block': None, u'Direction': u'Right', u'nthRun': None, u'SwitchTrial': u'buffer', u'Congruent': 0L, u'CorrAns': u'm', u'File': u'orange_arrow_R.png'},
      {u'Colour': u'blue', u'Trial': u'task', u'serialPosition': 0L, u'Location': u'Left', u'Position': [-0.33, 0], u'Block': 1L, u'Direction': u'Right', u'nthRun': 1L, u'SwitchTrial': u'switch', u'Congruent': 0L, u'CorrAns': u'n', u'File': u'blue_arrow_R.png'},
      {u'Colour': u'blue', u'Trial': u'task', u'serialPosition': 1L, u'Location': u'Right', u'Position': [0.33, 0], u'Block': 1L, u'Direction': u'Left', u'nthRun': 1L, u'SwitchTrial': u'non-switch', u'Congruent': 0L, u'CorrAns': u'm', u'File': u'blue_arrow_L.png'}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
    Routine switch_trial
    Routine ISI
  LoopTerminator switch1_trial
  Routine End
